<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q8="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q9="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:q2="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics" xmlns:q3="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics" xmlns:q4="clr-namespace:Bonsai.Uvc;assembly=Bonsai.Uvc" xmlns:q5="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q6="clr-namespace:;assembly=Extensions" xmlns:q7="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:CreateRandom">
          <q2:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="AsyncSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:CreateContinuousUniform">
          <q3:Lower>-0.9</q3:Lower>
          <q3:Upper>0.9</q3:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:DeviceCapture">
          <q4:Index>0</q4:Index>
          <q4:ColorFormat>Color</q4:ColorFormat>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:DeviceCapture">
          <q4:Index>2</q4:Index>
          <q4:ColorFormat>Grayscale</q4:ColorFormat>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Pupil</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:Centroid" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>World</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ViewMatrix</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:CreateOrthographic">
                <q1:Width>2.66666675</q1:Width>
                <q1:Height>2</q1:Height>
                <q1:NearClip>0</q1:NearClip>
                <q1:FarClip>100</q1:FarClip>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:AspectRatio" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property name="Width" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Defer">
        <Name>StartScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Timer">
                <q1:DueTime>PT1S</q1:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Last" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>DueTime</MemberName>
              <Name>DueTime</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>TextureName</MemberName>
              <Name>TextureName</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>SizeX</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawSprite">
              <TextureName />
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <SizeX>1.33333337</SizeX>
              <SizeY>1</SizeY>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FullWidth</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateFrame" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:AspectRatio" />
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>8</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>8</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>GazeCalibration</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q6:ModelUpdate" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>5</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>World</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Sobel">
                <q5:XOrder>1</q5:XOrder>
                <q5:YOrder>1</q5:YOrder>
                <q5:ApertureSize>7</q5:ApertureSize>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q7:Extrema" />
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>CalibrationTarget</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Grayscale" />
            </Expression>
            <Expression xsi:type="Defer">
              <Name>CalibrationTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Random</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Take">
                      <Count>60</Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>LocationX</MemberName>
                    <Name />
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>LocationY</MemberName>
                    <Name />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:Sample" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:Sample" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DelaySubscription">
                      <DueTime>PT1S</DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CalibrationTarget</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Pupil</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q6:AverageCorrespondence" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawTarget">
                    <LocationX>0.786388159</LocationX>
                    <LocationY>-0.40621984</LocationY>
                    <SizeX>0.1</SizeX>
                    <SizeY>0.1</SizeY>
                  </Expression>
                  <Expression xsi:type="SkipWhile">
                    <Name>SkipWhileMarkerNotFound</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.MaxValue</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="q7:Difference">
                            <q7:Order>1</q7:Order>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="LessThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>10000</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="ExternalizedProperty">
                          <MemberName>Value</MemberName>
                          <Name>Value</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge>
                          <From>0</From>
                          <To>2</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>2</From>
                          <To>3</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>3</From>
                          <To>4</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>4</From>
                          <To>1</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>5</From>
                          <To>4</To>
                          <Label>Source2</Label>
                        </Edge>
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>NonEmpty</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Length</Selector>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge>
                          <From>0</From>
                          <To>2</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>2</From>
                          <To>3</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>3</From>
                          <To>1</To>
                          <Label>Source1</Label>
                        </Edge>
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>ValidPupil</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="q8:ExpressionTransform">
                          <q8:Expression>!single.IsNaN(Item2.X)</q8:Expression>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge>
                          <From>0</From>
                          <To>2</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>2</From>
                          <To>1</To>
                          <Label>Source1</Label>
                        </Edge>
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>0</From>
                    <To>6</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>17</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>14</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>17</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>17</To>
                    <Label>Source3</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>7</From>
                    <To>13</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>8</From>
                    <To>10</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>9</From>
                    <To>16</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>10</From>
                    <To>18</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>11</From>
                    <To>19</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>13</From>
                    <To>11</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>14</From>
                    <To>7</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>15</From>
                    <To>12</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>16</From>
                    <To>10</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>17</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>18</From>
                    <To>20</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>19</From>
                    <To>15</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>20</From>
                    <To>13</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PupilTracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Threshold">
                <q5:ThresholdValue>0</q5:ThresholdValue>
                <q5:MaxValue>255</q5:MaxValue>
                <q5:ThresholdType>BinaryInv</q5:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:FindContours">
                <q5:Mode>External</q5:Mode>
                <q5:Method>ChainApproxNone</q5:Method>
                <q5:Offset>
                  <q5:X>0</q5:X>
                  <q5:Y>0</q5:Y>
                </q5:Offset>
                <q5:MinArea>50</q5:MinArea>
                <q5:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>MoviePlayback</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>World</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Pupil</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:FileCapture">
                <q5:FileName>Movies\video.avi</q5:FileName>
                <q5:PlaybackRate>0</q5:PlaybackRate>
                <q5:StartPosition>0</q5:StartPosition>
                <q5:PositionUnits>Frames</q5:PositionUnits>
                <q5:Loop>false</q5:Loop>
                <q5:Playing>true</q5:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="WithLatestFrom" />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>FileName</MemberName>
              <Name>FileName</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q6:ModelPredict" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateTexture">
                <q1:TextureName>Video</q1:TextureName>
                <q1:InternalFormat>Rgba</q1:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>SizeX</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PupilPosition</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Item2.Item1,Item2.Item3</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawSprite">
              <TextureName>Video</TextureName>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <SizeX>1.33333337</SizeX>
              <SizeY>-1</SizeY>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FullWidth</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateFrame" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:AspectRatio" />
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>14</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>13</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>15</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>15</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>PupilCalibration</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Pupil</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateTexture">
                <q1:TextureName>Video</q1:TextureName>
                <q1:InternalFormat>Rgba</q1:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q9:MouseDown" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Last" />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>SizeX</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawSprite">
              <TextureName>Video</TextureName>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <SizeX>1.33333337</SizeX>
              <SizeY>-1</SizeY>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FullWidth</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateFrame" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:AspectRatio" />
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>9</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>11</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.CreateRandom, Bonsai.Numerics, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.AsyncSubjectBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.Distributions.CreateContinuousUniform, Bonsai.Numerics, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Uvc.DeviceCapture, Bonsai.Uvc, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Centroid, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateOrthographic, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.AspectRatio, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MultiplyBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.Timer, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Last, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>ModelUpdate, Extensions, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.ToArray, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Repeat, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Sobel, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Extrema, Bonsai.Dsp, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.Distributions.Sample, Bonsai.Numerics, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.DelaySubscription, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.WithLatestFrom, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>AverageCorrespondence, Extensions, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SkipWhileBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Difference, Bonsai.Dsp, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.LessThanBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DoubleProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FileCapture, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>ModelPredict, Extensions, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateTexture, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.Input.MouseDown, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>